;hvi_zgesgp.dec
;avance-version (12/01/11)
;1D sequence w/ 15N/13C decoupling
;water suppression using excitation sculpting with gradients
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d12=20u"


"TAU=de+p1*2/3.1416+50u"

; add HvI
# ifdef CALC_POWER
; fix p12 /sp1 to 2ms Squa100.100 and to calculated power
"spnam1='Squa100.1000'"
"p12=2000"
"spw1=plw1*pow(p1*2/p12,2)"
"spoal1=0.5"
"spoffs1=0"
# endif CALC_POWER

"acqt0=0"
baseopt_echo


1 ze
2 30m do:f2 do:f3
  d12 pl1:f1 BLKGRAD
  d12 pl12:f2 pl16:f3
  d1
  p1 ph1
  
  50u UNBLKGRAD
  p16:gp1
  d16 pl0:f1
  (p12:sp1 ph2:r):f1
  4u
  d12 pl1:f1

  p2 ph3

  4u
  p16:gp1
  d16 
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp2
  d16

  go=2 ph31 cpd2:f2 cpd3:f3
  30m do:f2 do:f3 mc #0 to 2 F0(zd)
  4u BLKGRAD
exit


ph1=0
ph2=0 1
ph3=2 3
ph4=0 0 1 1
ph5=2 2 3 3
ph31=0 2 2 0 


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;ns: 8 * n, total number of scans: NS * TD0
;ds: 4


;use gradient ratio:    gp 1 : gp 2
;                         31 :   11

;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100



;$Id:$
